# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Painter Z-Crosstalk Compensation

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Painter_Z-Crosstalk_Compensation

# Define that this driver is a signal generator without hardware communication
signal_generator: True


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
[Crosstalk Matrix]
datatype: PATH
tooltip: a csv file that contains an NxN crosstalk matrix
group: Crosstalk
section: Setting

[Load Crosstalk Matrix]
datatype: BUTTON
tooltip: Load crosstalk matrix from the cvs file to the Input section
group: Crosstalk
Section: Setting

[Tuning Curves]
datatype: PATH
tooltip: a csv file that contains tuning curves for N qubits, with fmax, fmin, V_0, V_bias, f_bias
group: Tuning Curve
section: Setting

[Load Tuning Curves]
datatype: BUTTON
tooltip: Load tuning curves from the cvs file to the Input section
group: Tuning Curve
Section: Setting

[Number of Z-Control Lines]
datatype: COMBO
def_value: 2
combo_def_1: 2
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
group: Setting
section: Setting

[f max q1]
datatype: double
unit: GHz
def_value: 0
tooltip: Maximum frequency of qubit 1
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting

[f max q2]
datatype: double
unit: GHz
def_value: 0
tooltip: Maximum frequency of qubit 2
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting

[f max q3]
datatype: double
unit: GHz
def_value: 0
tooltip: Maximum frequency of qubit 3
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

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

[f min q1]
datatype: double
unit: GHz
def_value: 0
tooltip: Minimum frequency of qubit 1 (if asymmetric)
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting

[f min q2]
datatype: double
unit: GHz
tooltip: Minimum frequency of qubit 2 (if asymmetric)
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting

[f min q3]
datatype: double
unit: GHz
tooltip: Minimum frequency of qubit 3 (if asymmetric)
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

[f min q4]
datatype: double
unit: GHz
tooltip: Minimum frequency of qubit 4 (if asymmetric)
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
group: Qubit 4
section: Setting

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

[V0 q1]
datatype: double
def_value: 0
unit: V
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting

[V0 q2]
datatype: double
def_value: 0
unit: V
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting

[V0 q3]
datatype: double
unit: V
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

[V0 q4]
datatype: double
unit: V
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
group: Qubit 4
section: Setting

[V0 q5]
datatype: double
unit: V
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 5
state_value_2: 6
state_value_3: 7
group: Qubit 5
section: Setting

[V0 q6]
datatype: double
unit: V
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 6
state_value_2: 7
group: Qubit 6
section: Setting

[V0 q7]
datatype: double
unit: V
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 7
group: Qubit 7
section: Setting

[V bias q1]
datatype: double
def_value: 0
unit: V
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting

[V bias q2]
datatype: double
def_value: 0
unit: V
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting

[V bias q3]
datatype: double
def_value: 0
unit: V
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

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

[f bias q1]
datatype: double
unit: GHz
tooltip: frequency of qubit 1 with only V bias q1 applied and others 0
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting

[f bias q2]
datatype: double
unit: GHz
tooltip: frequency of qubit 2 with only V bias q2 applied and others 0
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting

[f bias q3]
datatype: double
unit: GHz
tooltip: frequency of qubit 3 with only V bias q3 applied and others 0
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

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

[f target q1]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 1
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 1
section: Setting


[f target q2]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 2
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Qubit 2
section: Setting


[f target q3]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 3
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Qubit 3
section: Setting

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

[Slope q1]
datatype: COMBO
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
def_value: Negative
combo_def_1: Positive
combo_def_2: Negative
group: Qubit 1
section: Setting

[Slope q2]
datatype: COMBO
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
def_value: Negative
combo_def_1: Positive
combo_def_2: Negative
group: Qubit 2
section: Setting

[Slope q3]
datatype: COMBO
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
def_value: Negative
combo_def_1: Positive
combo_def_2: Negative
group: Qubit 3
section: Setting

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

[Confirm]
datatype: BUTTON
tooltip: confirm input
group: Confirm
section: Setting

[V target q1]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 1
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Target Voltage
section: Setting

[V target q2]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 2
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Target Voltage
section: Setting


[V target q3]
datatype: double
unit: GHz
tooltip: Target frequency of qubit 3
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Target Voltage
section: Setting

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

[M11]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 1 frequency relationship with flux bias 1 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix
section: Setting

[M12]
datatype: double
permission: BOTH
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 2
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix
section: Setting

[M13]
datatype: double
permission: BOTH
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 3
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Crosstalk Matrix
section: Setting

[M14]
datatype: double
permission: BOTH
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 4
state_quant: Number of Z-Control Lines
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
group: Crosstalk Matrix
section: Setting

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

[M22]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 2 frequency relationship with flux bias 2 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix
section: Setting

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

[M33]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 3 frequency relationship with flux bias 3 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Crosstalk Matrix
section: Setting


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

[M44]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 4 frequency change in the presence of flux bias 7
state_quant: Number of Z-Control Lines
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
group: Crosstalk Matrix
section: Setting


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

[M55]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 5 frequency change in the presence of flux bias 7
state_quant: Number of Z-Control Lines
state_value_1: 5
state_value_2: 6
state_value_3: 7
group: Crosstalk Matrix
section: Setting

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

[M66]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 6 frequency change in the presence of flux bias 6
state_quant: Number of Z-Control Lines
state_value_1: 6
state_value_2: 7
group: Crosstalk Matrix
section: Setting

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

[M71]
datatype: double
def_value: 0
tooltip: Qubit 7 frequency change in the presence of flux bias 1
state_quant: Number of Z-Control Lines
state_value_1: 7
group: Crosstalk Matrix
section: Setting


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

[M77]
datatype: double
permission: BOTH
def_value: 1
tooltip: Qubit 7 frequency change in the presence of flux bias 6
state_quant: Number of Z-Control Lines
state_value_1: 7
group: Crosstalk Matrix
section: Setting



[Minv11]
datatype: double
def_value: 1
tooltip: Qubit 1 frequency relationship with flux bias 1 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix (inverse)
section: Output

[Minv12]
datatype: double
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 2
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix (inverse)
section: Output

[Minv13]
datatype: double
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 3
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Crosstalk Matrix (inverse)
section: Output

[Minv14]
datatype: double
def_value: 0
tooltip: Qubit 1 frequency change in the presence of flux bias 4
state_quant: Number of Z-Control Lines
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
group: Crosstalk Matrix (inverse)
section: Output

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

[Minv22]
datatype: double
def_value: 1
tooltip: Qubit 2 frequency relationship with flux bias 2 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Crosstalk Matrix (inverse)
section: Output

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

[Minv33]
datatype: double
def_value: 1
tooltip: Qubit 3 frequency relationship with flux bias 3 without any other flux presence
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Crosstalk Matrix (inverse)
section: Output


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

[Adjusted Voltage 1]
datatype: double
unit: V
def_value: 0
permission: READ
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Output
section: Output

[Adjusted Voltage 2]
datatype: double
unit: V
def_value: 0
permission: READ
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
group: Output
section: Output

[Adjusted Voltage 3]
datatype: double
unit: V
def_value: 0
permission: READ
state_quant: Number of Z-Control Lines
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
group: Output
section: Output

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

[Do Conversion]
datatype: BUTTON
group: Operation
section: Output
